<XDL>
  <Synthesis>
    <Hardware>
      <Component id="S-1" type="glass vial"/>
    </Hardware>
    <Metadata description="S-1" product="MIL-88B (Fe)"/>
    <Procedure>
      <Prep>
        <Add vessel="S-1" amount="16.0 milligram" reagent="FeCl3"/>
        <Add vessel="S-1" amount="16.0 milligram" reagent="Benzene-1,4-dicarboxylic acid"/>
        <Add vessel="S-1" amount="4.0 millilitre" reagent="DMF"/>
      </Prep>
      <Reaction>
        <Sonicate vessel="S-1" time="30.0 minute"/>
        <HeatChill comment="In: oven" vessel="S-1" temp="60.0 celsius" time="1.0 day"/>
      </Reaction>
      <Workup>
        <WashSolid vessel="S-1" reagent="Ethanol"/>
        <Dry vessel="S-1" temp="120.0 celsius" time="1.0 day" pressure="0.0 pascal"/>
      </Workup>
    </Procedure>
    <Reagents>
      <Reagent id="FeCl3" name="FeCl3" role="substrate"/>
      <Reagent id="Benzene-1,4-dicarboxylic acid" name="Benzene-1,4-dicarboxylic acid" role="ligand"/>
      <Reagent id="DMF" name="DMF" role="solvent"/>
      <Reagent id="Ethanol" name="Ethanol" role="solvent"/>
    </Reagents>
  </Synthesis>
  <Synthesis>
    <Hardware>
      <Component id="S-2" type="glass vial"/>
    </Hardware>
    <Metadata description="S-2" product="MIL-88B (Fe)"/>
    <Procedure>
      <Prep>
        <Add vessel="S-2" amount="16.0 milligram" reagent="FeCl3"/>
        <Add vessel="S-2" amount="16.0 milligram" reagent="Benzene-1,4-dicarboxylic acid"/>
        <Add vessel="S-2" amount="4.0 millilitre" reagent="DMF"/>
      </Prep>
      <Reaction>
        <Sonicate vessel="S-2" time="30.0 minute"/>
        <HeatChill comment="In: oven" vessel="S-2" temp="80.0 celsius" time="1.0 day"/>
      </Reaction>
      <Workup>
        <WashSolid vessel="S-2" reagent="Ethanol"/>
        <Dry vessel="S-2" temp="120.0 celsius" time="1.0 day" pressure="0.0 pascal"/>
      </Workup>
    </Procedure>
    <Reagents>
      <Reagent id="FeCl3" name="FeCl3" role="substrate"/>
      <Reagent id="Benzene-1,4-dicarboxylic acid" name="Benzene-1,4-dicarboxylic acid" role="ligand"/>
      <Reagent id="DMF" name="DMF" role="solvent"/>
      <Reagent id="Ethanol" name="Ethanol" role="solvent"/>
    </Reagents>
  </Synthesis>
  <Synthesis>
    <Hardware>
      <Component id="S-3" type="glass vial"/>
    </Hardware>
    <Metadata description="S-3" product="MIL-88B (Fe)"/>
    <Procedure>
      <Prep>
        <Add vessel="S-3" amount="16.0 milligram" reagent="FeCl3"/>
        <Add vessel="S-3" amount="16.0 milligram" reagent="Benzene-1,4-dicarboxylic acid"/>
        <Add vessel="S-3" amount="4.0 millilitre" reagent="DMF"/>
      </Prep>
      <Reaction>
        <Sonicate vessel="S-3" time="30.0 minute"/>
        <HeatChill comment="In: oven" vessel="S-3" temp="100.0 celsius" time="1.0 day"/>
      </Reaction>
      <Workup>
        <WashSolid vessel="S-3" reagent="Ethanol"/>
        <Dry vessel="S-3" temp="120.0 celsius" time="1.0 day" pressure="0.0 pascal"/>
      </Workup>
    </Procedure>
    <Reagents>
      <Reagent id="FeCl3" name="FeCl3" role="substrate"/>
      <Reagent id="Benzene-1,4-dicarboxylic acid" name="Benzene-1,4-dicarboxylic acid" role="ligand"/>
      <Reagent id="DMF" name="DMF" role="solvent"/>
      <Reagent id="Ethanol" name="Ethanol" role="solvent"/>
    </Reagents>
  </Synthesis>
  <Synthesis>
    <Hardware>
      <Component id="S-4" type="glass vial"/>
    </Hardware>
    <Metadata description="S-4" product="MIL-88B (Fe)"/>
    <Procedure>
      <Prep>
        <Add vessel="S-4" amount="16.0 milligram" reagent="FeCl3"/>
        <Add vessel="S-4" amount="16.0 milligram" reagent="Benzene-1,4-dicarboxylic acid"/>
        <Add vessel="S-4" amount="4.0 millilitre" reagent="Dry DMF"/>
      </Prep>
      <Reaction>
        <Sonicate vessel="S-4" time="30.0 minute"/>
        <HeatChill comment="In: oven" vessel="S-4" temp="120.0 celsius" time="1.0 day"/>
      </Reaction>
      <Workup>
        <WashSolid vessel="S-4" reagent="Ethanol"/>
        <Dry vessel="S-4" temp="120.0 celsius" time="1.0 day" pressure="0.0 pascal"/>
      </Workup>
    </Procedure>
    <Reagents>
      <Reagent id="FeCl3" name="FeCl3" role="substrate"/>
      <Reagent id="Benzene-1,4-dicarboxylic acid" name="Benzene-1,4-dicarboxylic acid" role="ligand"/>
      <Reagent id="Dry DMF" name="Dry DMF" role="solvent"/>
      <Reagent id="Ethanol" name="Ethanol" role="solvent"/>
    </Reagents>
  </Synthesis>
  <Synthesis>
    <Hardware>
      <Component id="S-5" type="glass vial"/>
    </Hardware>
    <Metadata description="S-5" product="MIL-88B (Fe)"/>
    <Procedure>
      <Prep>
        <Add vessel="S-5" amount="16.0 milligram" reagent="FeCl3"/>
        <Add vessel="S-5" amount="16.0 milligram" reagent="Benzene-1,4-dicarboxylic acid"/>
        <Add vessel="S-5" amount="4.0 millilitre" reagent="DMF"/>
      </Prep>
      <Reaction>
        <Sonicate vessel="S-5" time="30.0 minute"/>
        <HeatChill comment="In: oven" vessel="S-5" temp="120.0 celsius" time="1.0 day"/>
      </Reaction>
      <Workup>
        <WashSolid vessel="S-5" reagent="Ethanol"/>
        <Dry vessel="S-5" temp="120.0 celsius" time="1.0 day" pressure="0.0 pascal"/>
      </Workup>
    </Procedure>
    <Reagents>
      <Reagent id="FeCl3" name="FeCl3" role="substrate"/>
      <Reagent id="Benzene-1,4-dicarboxylic acid" name="Benzene-1,4-dicarboxylic acid" role="ligand"/>
      <Reagent id="DMF" name="DMF" role="solvent"/>
      <Reagent id="Ethanol" name="Ethanol" role="solvent"/>
    </Reagents>
  </Synthesis>
  <Synthesis>
    <Hardware>
      <Component id="S-6" type="microwave vial"/>
    </Hardware>
    <Metadata description="S-6" product="MIL-88B (Fe)"/>
    <Procedure>
      <Prep>
        <Add vessel="S-6" amount="16.0 milligram" reagent="FeCl3"/>
        <Add vessel="S-6" amount="16.0 milligram" reagent="Benzene-1,4-dicarboxylic acid"/>
        <Add vessel="S-6" amount="4.0 millilitre" reagent="DMF"/>
      </Prep>
      <Reaction>
        <Sonicate vessel="S-6" time="30.0 minute"/>
        <HeatChill comment="In: microwave" vessel="S-6" temp="120.0 celsius" time="1.0 hour"/>
      </Reaction>
      <Workup>
        <WashSolid vessel="S-6" reagent="Ethanol"/>
        <Dry vessel="S-6" temp="120.0 celsius" time="1.0 day" pressure="0.0 pascal"/>
      </Workup>
    </Procedure>
    <Reagents>
      <Reagent id="FeCl3" name="FeCl3" role="substrate"/>
      <Reagent id="Benzene-1,4-dicarboxylic acid" name="Benzene-1,4-dicarboxylic acid" role="ligand"/>
      <Reagent id="DMF" name="DMF" role="solvent"/>
      <Reagent id="Ethanol" name="Ethanol" role="solvent"/>
    </Reagents>
  </Synthesis>
  <Synthesis>
    <Hardware>
      <Component id="S-7" type="microwave vial"/>
    </Hardware>
    <Metadata description="S-7" product="MIL-88B (Fe)"/>
    <Procedure>
      <Prep>
        <Add vessel="S-7" amount="16.0 milligram" reagent="FeCl3"/>
        <Add vessel="S-7" amount="16.0 milligram" reagent="Benzene-1,4-dicarboxylic acid"/>
        <Add vessel="S-7" amount="4.0 millilitre" reagent="DMF"/>
      </Prep>
      <Reaction>
        <Sonicate vessel="S-7" time="30.0 minute"/>
        <HeatChill comment="In: microwave" vessel="S-7" temp="140.0 celsius" time="2.0 hour"/>
      </Reaction>
      <Workup>
        <WashSolid vessel="S-7" reagent="Ethanol"/>
        <Dry vessel="S-7" temp="120.0 celsius" time="1.0 day" pressure="0.0 pascal"/>
      </Workup>
    </Procedure>
    <Reagents>
      <Reagent id="FeCl3" name="FeCl3" role="substrate"/>
      <Reagent id="Benzene-1,4-dicarboxylic acid" name="Benzene-1,4-dicarboxylic acid" role="ligand"/>
      <Reagent id="DMF" name="DMF" role="solvent"/>
      <Reagent id="Ethanol" name="Ethanol" role="solvent"/>
    </Reagents>
  </Synthesis>
  <Synthesis>
    <Hardware>
      <Component id="S-8" type="glass vial"/>
    </Hardware>
    <Metadata description="S-8" product="MIL-88B+MIL101 (mix phases)"/>
    <Procedure>
      <Prep>
        <Add vessel="S-8" amount="16.0 milligram" reagent="FeCl3"/>
        <Add vessel="S-8" amount="16.0 milligram" reagent="Benzene-1,4-dicarboxylic acid"/>
        <Add vessel="S-8" amount="4.0 millilitre" reagent="DMF"/>
        <Add vessel="S-8" amount="100.0 microlitre" reagent="NaOH (1 M)"/>
      </Prep>
      <Reaction>
        <Sonicate vessel="S-8" time="30.0 minute"/>
        <HeatChill comment="In: oven" vessel="S-8" temp="120.0 celsius" time="1.0 day"/>
      </Reaction>
      <Workup>
        <WashSolid vessel="S-8" reagent="Ethanol"/>
        <Dry vessel="S-8" temp="120.0 celsius" time="1.0 day" pressure="0.0 pascal"/>
      </Workup>
    </Procedure>
    <Reagents>
      <Reagent id="FeCl3" name="FeCl3" role="substrate"/>
      <Reagent id="Benzene-1,4-dicarboxylic acid" name="Benzene-1,4-dicarboxylic acid" role="ligand"/>
      <Reagent id="DMF" name="DMF" role="solvent"/>
      <Reagent id="Ethanol" name="Ethanol" role="solvent"/>
      <Reagent id="NaOH (1 M)" name="NaOH (1 M)" role="reagent"/>
    </Reagents>
  </Synthesis>
  <Synthesis>
    <Hardware>
      <Component id="S-9" type="glass vial"/>
    </Hardware>
    <Metadata description="S-9" product="MIL-88B+MIL101 (mix phases)"/>
    <Procedure>
      <Prep>
        <Add vessel="S-9" amount="16.0 milligram" reagent="FeCl3"/>
        <Add vessel="S-9" amount="16.0 milligram" reagent="Benzene-1,4-dicarboxylic acid"/>
        <Add vessel="S-9" amount="4.0 millilitre" reagent="DMF"/>
        <Add vessel="S-9" amount="100.0 microlitre" reagent="HCI (1 M)"/>
      </Prep>
      <Reaction>
        <Sonicate vessel="S-9" time="30.0 minute"/>
        <HeatChill comment="In: oven" vessel="S-9" temp="120.0 celsius" time="1.0 day"/>
      </Reaction>
      <Workup>
        <WashSolid vessel="S-9" reagent="Ethanol"/>
        <Dry vessel="S-9" temp="120.0 celsius" time="1.0 day" pressure="0.0 pascal"/>
      </Workup>
    </Procedure>
    <Reagents>
      <Reagent id="FeCl3" name="FeCl3" role="substrate"/>
      <Reagent id="Benzene-1,4-dicarboxylic acid" name="Benzene-1,4-dicarboxylic acid" role="ligand"/>
      <Reagent id="DMF" name="DMF" role="solvent"/>
      <Reagent id="Ethanol" name="Ethanol" role="solvent"/>
      <Reagent id="HCI (1 M)" name="HCI (1 M)" role="reagent"/>
    </Reagents>
  </Synthesis>
  <Synthesis>
    <Hardware>
      <Component id="S-10" type="glass vial"/>
    </Hardware>
    <Metadata description="S-10" product="MIL-88B+MIL101 (mix phases)"/>
    <Procedure>
      <Prep>
        <Add vessel="S-10" amount="27.0 milligram" reagent="FeCl3·6H2O"/>
        <Add vessel="S-10" amount="16.0 milligram" reagent="Benzene-1,4-dicarboxylic acid"/>
        <Add vessel="S-10" amount="4.0 millilitre" reagent="DMF"/>
      </Prep>
      <Reaction>
        <Sonicate vessel="S-10" time="30.0 minute"/>
        <HeatChill comment="In: oven" vessel="S-10" temp="60.0 celsius" time="1.0 day"/>
      </Reaction>
      <Workup>
        <WashSolid vessel="S-10" reagent="Ethanol"/>
        <Dry vessel="S-10" temp="120.0 celsius" time="1.0 day" pressure="0.0 pascal"/>
      </Workup>
    </Procedure>
    <Reagents>
      <Reagent id="FeCl3·6H2O" name="FeCl3·6H2O" role="substrate"/>
      <Reagent id="Benzene-1,4-dicarboxylic acid" name="Benzene-1,4-dicarboxylic acid" role="ligand"/>
      <Reagent id="DMF" name="DMF" role="solvent"/>
      <Reagent id="Ethanol" name="Ethanol" role="solvent"/>
    </Reagents>
  </Synthesis>
  <Synthesis>
    <Hardware>
      <Component id="S-11" type="glass vial"/>
    </Hardware>
    <Metadata description="S-11" product="MIL-88B+MIL101 (mix phases)"/>
    <Procedure>
      <Prep>
        <Add vessel="S-11" amount="27.0 milligram" reagent="FeCl3·6H2O"/>
        <Add vessel="S-11" amount="16.0 milligram" reagent="Benzene-1,4-dicarboxylic acid"/>
        <Add vessel="S-11" amount="4.0 millilitre" reagent="DMF"/>
      </Prep>
      <Reaction>
        <Sonicate vessel="S-11" time="30.0 minute"/>
        <HeatChill comment="In: oven" vessel="S-11" temp="80.0 celsius" time="1.0 day"/>
      </Reaction>
      <Workup>
        <WashSolid vessel="S-11" reagent="Ethanol"/>
        <Dry vessel="S-11" temp="120.0 celsius" time="1.0 day" pressure="0.0 pascal"/>
      </Workup>
    </Procedure>
    <Reagents>
      <Reagent id="FeCl3·6H2O" name="FeCl3·6H2O" role="substrate"/>
      <Reagent id="Benzene-1,4-dicarboxylic acid" name="Benzene-1,4-dicarboxylic acid" role="ligand"/>
      <Reagent id="DMF" name="DMF" role="solvent"/>
      <Reagent id="Ethanol" name="Ethanol" role="solvent"/>
    </Reagents>
  </Synthesis>
  <Synthesis>
    <Hardware>
      <Component id="S-12" type="glass vial"/>
    </Hardware>
    <Metadata description="S-12" product="MIL-88B+MIL101 (mix phases)"/>
    <Procedure>
      <Prep>
        <Add vessel="S-12" amount="27.0 milligram" reagent="FeCl3·6H2O"/>
        <Add vessel="S-12" amount="16.0 milligram" reagent="Benzene-1,4-dicarboxylic acid"/>
        <Add vessel="S-12" amount="4.0 millilitre" reagent="DMF"/>
      </Prep>
      <Reaction>
        <Sonicate vessel="S-12" time="30.0 minute"/>
        <HeatChill comment="In: oven" vessel="S-12" temp="100.0 celsius" time="1.0 day"/>
      </Reaction>
      <Workup>
        <WashSolid vessel="S-12" reagent="Ethanol"/>
        <Dry vessel="S-12" temp="120.0 celsius" time="1.0 day" pressure="0.0 pascal"/>
      </Workup>
    </Procedure>
    <Reagents>
      <Reagent id="FeCl3·6H2O" name="FeCl3·6H2O" role="substrate"/>
      <Reagent id="Benzene-1,4-dicarboxylic acid" name="Benzene-1,4-dicarboxylic acid" role="ligand"/>
      <Reagent id="DMF" name="DMF" role="solvent"/>
      <Reagent id="Ethanol" name="Ethanol" role="solvent"/>
    </Reagents>
  </Synthesis>
  <Synthesis>
    <Hardware>
      <Component id="S-13" type="glass vial"/>
    </Hardware>
    <Metadata description="S-13" product="MIL-88B+MIL101 (mix phases)"/>
    <Procedure>
      <Prep>
        <Add vessel="S-13" amount="27.0 milligram" reagent="FeCl3·6H2O"/>
        <Add vessel="S-13" amount="16.0 milligram" reagent="Benzene-1,4-dicarboxylic acid"/>
        <Add vessel="S-13" amount="4.0 millilitre" reagent="DMF"/>
      </Prep>
      <Reaction>
        <Sonicate vessel="S-13" time="30.0 minute"/>
        <HeatChill comment="In: oven" vessel="S-13" temp="120.0 celsius" time="1.0 day"/>
      </Reaction>
      <Workup>
        <WashSolid vessel="S-13" reagent="Ethanol"/>
        <Dry vessel="S-13" temp="120.0 celsius" time="1.0 day" pressure="0.0 pascal"/>
      </Workup>
    </Procedure>
    <Reagents>
      <Reagent id="FeCl3·6H2O" name="FeCl3·6H2O" role="substrate"/>
      <Reagent id="Benzene-1,4-dicarboxylic acid" name="Benzene-1,4-dicarboxylic acid" role="ligand"/>
      <Reagent id="DMF" name="DMF" role="solvent"/>
      <Reagent id="Ethanol" name="Ethanol" role="solvent"/>
    </Reagents>
  </Synthesis>
  <Synthesis>
    <Hardware>
      <Component id="S-14" type="microwave vial"/>
    </Hardware>
    <Metadata description="S-14" product="MIL-88B+MIL101 (mix phases)"/>
    <Procedure>
      <Prep>
        <Add vessel="S-14" amount="27.0 milligram" reagent="FeCl3·6H2O"/>
        <Add vessel="S-14" amount="16.0 milligram" reagent="Benzene-1,4-dicarboxylic acid"/>
        <Add vessel="S-14" amount="4.0 millilitre" reagent="DMF"/>
      </Prep>
      <Reaction>
        <Sonicate vessel="S-14" time="30.0 minute"/>
        <HeatChill comment="In: microwave" vessel="S-14" temp="140.0 celsius" time="2.0 hour"/>
      </Reaction>
      <Workup>
        <WashSolid vessel="S-14" reagent="Ethanol"/>
        <Dry vessel="S-14" temp="120.0 celsius" time="1.0 day" pressure="0.0 pascal"/>
      </Workup>
    </Procedure>
    <Reagents>
      <Reagent id="FeCl3·6H2O" name="FeCl3·6H2O" role="substrate"/>
      <Reagent id="Benzene-1,4-dicarboxylic acid" name="Benzene-1,4-dicarboxylic acid" role="ligand"/>
      <Reagent id="DMF" name="DMF" role="solvent"/>
      <Reagent id="Ethanol" name="Ethanol" role="solvent"/>
    </Reagents>
  </Synthesis>
  <Synthesis>
    <Hardware>
      <Component id="S-15" type="glass vial"/>
    </Hardware>
    <Metadata description="S-15" product="MIL-88B+MIL101 (mix phases)"/>
    <Procedure>
      <Prep>
        <Add vessel="S-15" amount="27.0 milligram" reagent="FeCl3·6H2O"/>
        <Add vessel="S-15" amount="16.0 milligram" reagent="Benzene-1,4-dicarboxylic acid"/>
        <Add vessel="S-15" amount="4.0 millilitre" reagent="DMF"/>
        <Add vessel="S-15" amount="100.0 microlitre" reagent="NaOH (1 M)"/>
      </Prep>
      <Reaction>
        <Sonicate vessel="S-15" time="30.0 minute"/>
        <HeatChill comment="In: oven" vessel="S-15" temp="120.0 celsius" time="1.0 day"/>
      </Reaction>
      <Workup>
        <WashSolid vessel="S-15" reagent="Ethanol"/>
        <Dry vessel="S-15" temp="120.0 celsius" time="1.0 day" pressure="0.0 pascal"/>
      </Workup>
    </Procedure>
    <Reagents>
      <Reagent id="FeCl3·6H2O" name="FeCl3·6H2O" role="substrate"/>
      <Reagent id="Benzene-1,4-dicarboxylic acid" name="Benzene-1,4-dicarboxylic acid" role="ligand"/>
      <Reagent id="DMF" name="DMF" role="solvent"/>
      <Reagent id="Ethanol" name="Ethanol" role="solvent"/>
      <Reagent id="NaOH (1 M)" name="NaOH (1 M)" role="reagent"/>
    </Reagents>
  </Synthesis>
  <Synthesis>
    <Hardware>
      <Component id="S-16" type="glass vial"/>
    </Hardware>
    <Metadata description="S-16" product="MIL-88B+MIL101 (mix phases)"/>
    <Procedure>
      <Prep>
        <Add vessel="S-16" amount="27.0 milligram" reagent="FeCl3·6H2O"/>
        <Add vessel="S-16" amount="16.0 milligram" reagent="Benzene-1,4-dicarboxylic acid"/>
        <Add vessel="S-16" amount="4.0 millilitre" reagent="DMF"/>
        <Add vessel="S-16" amount="100.0 microlitre" reagent="HCI (1 M)"/>
      </Prep>
      <Reaction>
        <Sonicate vessel="S-16" time="30.0 minute"/>
        <HeatChill comment="In: oven" vessel="S-16" temp="120.0 celsius" time="1.0 day"/>
      </Reaction>
      <Workup>
        <WashSolid vessel="S-16" reagent="Ethanol"/>
        <Dry vessel="S-16" temp="120.0 celsius" time="1.0 day" pressure="0.0 pascal"/>
      </Workup>
    </Procedure>
    <Reagents>
      <Reagent id="FeCl3·6H2O" name="FeCl3·6H2O" role="substrate"/>
      <Reagent id="Benzene-1,4-dicarboxylic acid" name="Benzene-1,4-dicarboxylic acid" role="ligand"/>
      <Reagent id="DMF" name="DMF" role="solvent"/>
      <Reagent id="Ethanol" name="Ethanol" role="solvent"/>
      <Reagent id="HCI (1 M)" name="HCI (1 M)" role="reagent"/>
    </Reagents>
  </Synthesis>
  <Synthesis>
    <Hardware>
      <Component id="S-17" type="glass vial"/>
    </Hardware>
    <Metadata description="S-17" product="MIL-88B+MIL101 (mix phases)"/>
    <Procedure>
      <Prep>
        <Add vessel="S-17" amount="270.0 milligram" reagent="FeCl3·6H2O"/>
        <Add vessel="S-17" amount="166.0 milligram" reagent="Benzene-1,4-dicarboxylic acid"/>
        <Add vessel="S-17" amount="4.0 millilitre" reagent="DMF"/>
      </Prep>
      <Reaction>
        <Sonicate vessel="S-17" time="30.0 minute"/>
        <HeatChill comment="In: oven" vessel="S-17" temp="120.0 celsius" time="3.0 day"/>
      </Reaction>
      <Workup>
        <WashSolid vessel="S-17" reagent="Ethanol"/>
        <Dry vessel="S-17" temp="120.0 celsius" time="1.0 day" pressure="0.0 pascal"/>
      </Workup>
    </Procedure>
    <Reagents>
      <Reagent id="FeCl3·6H2O" name="FeCl3·6H2O" role="substrate"/>
      <Reagent id="Benzene-1,4-dicarboxylic acid" name="Benzene-1,4-dicarboxylic acid" role="ligand"/>
      <Reagent id="DMF" name="DMF" role="solvent"/>
      <Reagent id="Ethanol" name="Ethanol" role="solvent"/>
    </Reagents>
  </Synthesis>
  <Synthesis>
    <Hardware>
      <Component id="S-18" type="Teflon-lined autoclave"/>
    </Hardware>
    <Metadata description="S-18" product="MIL-53 (Fe)"/>
    <Procedure>
      <Prep>
        <Add vessel="S-18" amount="270.0 milligram" reagent="FeCl3·6H2O"/>
        <Add vessel="S-18" amount="166.0 milligram" reagent="Benzene-1,4-dicarboxylic acid"/>
        <Add vessel="S-18" amount="5.0 millilitre" reagent="DMF"/>
      </Prep>
      <Reaction>
        <Sonicate vessel="S-18" time="30.0 minute"/>
        <HeatChill comment="In: oven" vessel="S-18" temp="150.0 celsius" time="3.0 day"/>
      </Reaction>
      <Workup>
        <WashSolid vessel="S-18" reagent="Ethanol"/>
        <Dry vessel="S-18" temp="120.0 celsius" time="1.0 day" pressure="0.0 pascal"/>
      </Workup>
    </Procedure>
    <Reagents>
      <Reagent id="FeCl3·6H2O" name="FeCl3·6H2O" role="substrate"/>
      <Reagent id="Benzene-1,4-dicarboxylic acid" name="Benzene-1,4-dicarboxylic acid" role="ligand"/>
      <Reagent id="DMF" name="DMF" role="solvent"/>
      <Reagent id="Ethanol" name="Ethanol" role="solvent"/>
    </Reagents>
  </Synthesis>
  <Synthesis>
    <Hardware>
      <Component id="S-19" type="Teflon-lined autoclave"/>
    </Hardware>
    <Metadata description="S-19" product="MIL-101 (Fe)"/>
    <Procedure>
      <Prep>
        <Add vessel="S-19" amount="452.0 milligram" reagent="FeCl3·6H2O"/>
        <Add vessel="S-19" amount="138.0 milligram" reagent="Benzene-1,4-dicarboxylic acid"/>
        <Add vessel="S-19" amount="10.0 millilitre" reagent="DMF"/>
      </Prep>
      <Reaction>
        <Sonicate vessel="S-19" time="30.0 minute"/>
        <HeatChill comment="In: oven" vessel="S-19" temp="110.0 celsius" time="1.0 day"/>
      </Reaction>
      <Workup>
        <WashSolid vessel="S-19" reagent="Ethanol"/>
        <Dry vessel="S-19" temp="120.0 celsius" time="1.0 day" pressure="0.0 pascal"/>
      </Workup>
    </Procedure>
    <Reagents>
      <Reagent id="FeCl3·6H2O" name="FeCl3·6H2O" role="substrate"/>
      <Reagent id="Benzene-1,4-dicarboxylic acid" name="Benzene-1,4-dicarboxylic acid" role="ligand"/>
      <Reagent id="DMF" name="DMF" role="solvent"/>
      <Reagent id="Ethanol" name="Ethanol" role="solvent"/>
    </Reagents>
  </Synthesis>
  <Synthesis>
    <Hardware>
      <Component id="S-20" type="Teflon-lined autoclave"/>
    </Hardware>
    <Metadata description="S-20" product="MIL-53 (Fe)+MIL-68 (Fe)"/>
    <Procedure>
      <Prep>
        <Add vessel="S-20" amount="270.0 milligram" reagent="FeCl3·6H2O"/>
        <Add vessel="S-20" amount="166.0 milligram" reagent="Benzene-1,4-dicarboxylic acid"/>
        <Add vessel="S-20" amount="10.0 millilitre" reagent="DMF"/>
      </Prep>
      <Reaction>
        <Sonicate vessel="S-20" time="30.0 minute"/>
        <HeatChill comment="In: oven" vessel="S-20" temp="100.0 celsius" time="7.0 day"/>
      </Reaction>
      <Workup>
        <WashSolid vessel="S-20" reagent="Ethanol"/>
        <Dry vessel="S-20" temp="120.0 celsius" time="1.0 day" pressure="0.0 pascal"/>
      </Workup>
    </Procedure>
    <Reagents>
      <Reagent id="FeCl3·6H2O" name="FeCl3·6H2O" role="substrate"/>
      <Reagent id="Benzene-1,4-dicarboxylic acid" name="Benzene-1,4-dicarboxylic acid" role="ligand"/>
      <Reagent id="DMF" name="DMF" role="solvent"/>
      <Reagent id="Ethanol" name="Ethanol" role="solvent"/>
    </Reagents>
  </Synthesis>
  <Synthesis>
    <Hardware>
      <Component id="S-21" type="Teflon-lined autoclave"/>
    </Hardware>
    <Metadata description="S-21" product="MIL-68 (Fe)"/>
    <Procedure>
      <Prep>
        <Add vessel="S-21" amount="332.0 milligram" reagent="FeCl3·6H2O"/>
        <Add vessel="S-21" amount="138.0 milligram" reagent="Benzene-1,4-dicarboxylic acid"/>
        <Add vessel="S-21" amount="10.0 millilitre" reagent="DMF"/>
        <Add vessel="S-21" amount="240.0 microlitre" reagent="5M HF, 1M HCl"/>
      </Prep>
      <Reaction>
        <Sonicate vessel="S-21" time="30.0 minute"/>
        <HeatChill comment="In: oven" vessel="S-21" temp="100.0 celsius" time="5.0 day"/>
      </Reaction>
      <Workup>
        <WashSolid vessel="S-21" reagent="Ethanol"/>
        <Dry vessel="S-21" temp="120.0 celsius" time="1.0 day" pressure="0.0 pascal"/>
      </Workup>
    </Procedure>
    <Reagents>
      <Reagent id="FeCl3·6H2O" name="FeCl3·6H2O" role="substrate"/>
      <Reagent id="Benzene-1,4-dicarboxylic acid" name="Benzene-1,4-dicarboxylic acid" role="ligand"/>
      <Reagent id="DMF" name="DMF" role="solvent"/>
      <Reagent id="Ethanol" name="Ethanol" role="solvent"/>
      <Reagent id="5M HF, 1M HCl" name="5M HF, 1M HCl" role="reagent"/>
    </Reagents>
  </Synthesis>
</XDL>
